CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Stem>.*)_C(?P<Channel>[0-9])_T(?P<TP>[0-9]{3})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:NucMarker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:Dorsal
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedDorsal
    Image or measurement?:Image
    Select the first image:Dorsal
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:6|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
    Select the input image:InvertedDorsal
    Name the output image:SmoothedDorsal
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:SmoothedDorsal
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabels
    Select the color format:uint16
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabels
    Select method for constructing file names:Single name
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    Enter single file name:\g<Stem>_T\g<TP>_cpNuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
